OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online File Replay
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main between this scenario and
  scenario 4-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 4-online for
  details about the processing.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/CHANGE_ME.ov
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #1
#1.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#4, Input stimulations=#1.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Features=#7 -> 0xc67a01dc Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
New input[0]=#8.Labels, New input[1]=#1.Output stream 3 -> P300 accumulator => #9
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-accumulator.lua
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
#1.Output stream 3 -> Pick flash => #10
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-filter-flash.lua
#1.Output stream 3 -> Pick target => #11
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-filter-target.lua
Sequence stimulations=#10, Target stimulations=#11, Row selection stimulations=#9.Stimulations, Column selection stimulations=#9.New output -> P300 Speller Visualization
  Interface filename = ${Path_Data}/plugins/simple-visualization/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualization.cfg
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
